PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = (1024, 768)
  color = $(0.5922, 0.5922, 0.5922)
  expName = experiment
  eyetracker = eyetracker.hw.mouse.EyeTracker
  keyboardBackend = ioHub
  mgBlink = ['MIDDLE_BUTTON']
  mgMove = CONTINUOUS
  mgSaccade = 0.5
  runMode = 1
  srEnableInterfaceWithoutConnection = False
  srFileSampleFiltering = FILTER_LEVEL_OFF
  srLiveSampleFiltering = FILTER_LEVEL_OFF
  srModelName = EYELINK 1000 DESKTOP
  srNativeDataFileName = et_data
  srNetIP4Address = 100.1.1.1
  srSamplingRate = 1000
  srSimulationMode = False
  srTrackEyes = RIGHT_EYE
  srVOGPupilCenterAlgorithm = ELLIPSE_FIT
  srVOGPupilMeasureTypes = PUPIL_AREA
  srVOGTrackingMode = PUPIL_CR_TRACKING
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Routines
  Routine question
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    ImageComponent question_image
      image [set every repeat] = $"stimuli/"+paragraph+".question.png"
      size = (1000, 650)
      startVal [time (s)] = 0.0
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    KeyboardComponent question_key_arrow
      allowedKeys = 'up','left','right','down'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent question_key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = $question_key_arrow.keys
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    PolygonComponent question_selector
      fillColor = none
      lineColor = black
      lineWidth = 2
      pos [set every frame] = {'up': (0, 84), 'left': (-230, -28), 'right': (230, -28), 'down': (0, -140)}.get(question_key_arrow.keys, (0, 0))
      shape = rectangle
      size = (460, 112)
      startVal [condition] = question_key_arrow.keys
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    EyetrackerRecordComponent question_record
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = True
      syncScreenRefresh = False
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  Routine text
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    ImageComponent text_image
      image [set every repeat] = $"stimuli/"+paragraph+".text.png"
      size = (1000, 650)
      startVal [time (s)] = 0.0
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    KeyboardComponent text_key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    EyetrackerRecordComponent text_record
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = True
      syncScreenRefresh = False
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  Routine instructions
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    ImageComponent instructions_image
      image = stimuli/instructions.png
      size = (1000, 650)
      startVal [time (s)] = 0.0
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    KeyboardComponent instructions_key_end
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent instructions_record
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine end
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    ImageComponent end_image
      image = stimuli/end.png
      size = (1000, 650)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = white
    innerRadius = 2
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 8
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = black
    units = from exp settings
    useCustom = False
Flow
  EyetrackerCalibrationRoutine calibration
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sequence.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('paragraph', np.float64(0.0))]),
      OrderedDict([('paragraph', np.float64(0.1))]),
      OrderedDict([('paragraph', np.float64(0.2))])]
    Routine text
    Routine question
  LoopTerminator trials
  Routine end
